PsychoPy2experiment version="1.79.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = ior
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    PolygonComponent frameMiddle
      startVal [time (s)] = 0.0
      size = [1, 1]
      fillColor = $[-1,-1,-1]
      units = deg
      lineColor = $[0,0,0]
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    PolygonComponent frameLeft
      pos = [-8, 0]
      startVal [time (s)] = 0.0
      size = [1, 1]
      fillColor = $[-1,-1,-1]
      units = deg
      lineColor = $[0,0,0]
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    PolygonComponent frameRight
      pos = [8, 0]
      startVal [time (s)] = 0.0
      size = [1, 1]
      fillColor = $[-1,-1,-1]
      units = deg
      lineColor = $[0,0,0]
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  Routine instructions
    TextComponent instructionsText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        V následujícím experimentu se testuje váš postřeh. Experiment se
        skládá z krátkých úloh, které se budou v obměnách opakovat. V každé
        úloze uvidíte 3 čtverce, po celou dobu sledujte prostřední čtverec,
        nesnažte se hýbat očima. Čekejte, zda se objeví v některém čtverci
        malý bílý čtvereček a pokud ano, stiskněte co nejrychleji mezerník.
        Pokud ne, nedělejte nic a počkejte na další úlohu. Snažte se pracovat
        co nejrychleji, ale přesně (bez chyb).
    KeyboardComponent instructionsKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  Routine trial
